PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '0', 'session': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = EMS-TMR_retrievalv1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instuctions_part3
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    TextComponent text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Willkommen zum dritten Teil des Experiments.

        Hier wirst du jetzt die Möglichkeit haben die Wort-Bild Paare noch besser zu lernen. Im Folgenden wird dir immer ein Word vorgespielt. Deine Aufgabe ist es anschließend anzugeben, ob das Wort dir bereits bekannt ist (alt) oder ob du es bisher noch nicht gehört hattest (neu). Sollte dir das Wort bekannt sein wirst du anschließend aufgefordert aus 3 Bildern das zu dem Wort gehörige Bild auszuwählen.

        Auch wenn das Wort für dich unbekannt ist, kannst du anschließend eines von drei Bildern auswählen, welches zu dem Wort gehören könnte, wäre es dir doch bekannt.

        Für die Entscheidung, ob das Wort bekannt ist, hast du 2 Sekunden Zeit. Für die Auswahl des passenden Bildes bekommst du 5 Sekunden Zeit.
    KeyboardComponent key_resp
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text = """Welcome to the third part of the experiment.
            Here you will now have the opportunity to learn the word-picture pairs even better.
            In the following, a word will be played. Your task is to indicate whether you already know the word (old) or whether you have never heard it before (new).
            If you know the word, you will then be asked to choose the picture that is associated with the word from three choices. """
  Routine sound_word
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    SoundComponent verb_1
      sound [set every repeat] = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = X
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  Routine decision_newold
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    CodeComponent decision_code
      Code Type = Auto->JS
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      Begin Routine:
        if word == ".foil" and keypress == TRUE:
            false_alarms = false_alarms + 1
        elif word != ".foil" and keypress == FALSE:
            misses = misses + 1
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Drücke eine beliebige Taste, wenn dir das Wort bekannt war.
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine imagechoice
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    ImageComponent image
      image = stimuli/image_21.webp
      pos = (-2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_3
      pos = (2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_8
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welches Bild passt zu dem Wort?
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if misses == 0 and false_alarms == 0 and keypress == FALSE:
            incorrect_associations = incorrect_associations + 1
    KeyboardComponent key_resp_6
      allowedKeys = 'y','b','r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine fixation_cross
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    TextComponent retrieval_fixation
      durationEstim = 1.5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_fixation_cross
      text = X
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  Routine retrieval_feedback
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0 and incorrect_associations == 0:
            feedback_string = 'Richtig!\n\n'
            retrieval_text.text = feedback_string
            retrieval_text.text.color = '\033[32m'
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Das Wort war dir bekannt.\n'
            if false_alarms:
                feedback_string += f'Das Wort war dir unbekannt.\n'
            if incorrect_associations:
                feedback_string += f'Falsches Bild zu bekanntem Wort. \n'
            retrieval_text.text = feedback_string
            retrieval_text.text.color = '\033[31m'
    TextComponent retrieval_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = dummy...something went wrong
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  Routine instructions_part3_2
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    TextComponent text_2
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Wie auch bei der ersten und zweiten Aufgabe wirst du hier zunächst eine Übung durchlaufen können.

        Falls du noch Fragen hast, melde dich gerne beim Experimentleiter.

        Ansonsten drücke gerne eine beliebige Taste, um mit der Übung zu starten.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_2 = """ As with the first and second tasks, you will first be able to complete a practice exercise.
            If you have any questions, please contact the experimentor.
            Otherwise, press any button to start the exercise."""
  Routine practice_feedback
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent feedback_loop
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0 and incorrect_associations == 0:
            retrieval_repetition.finished=True
            feedback_string = 'Gratuliere, du hast alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit dem tatsächlichen Experiment.\n\n'
            feedback_string += 'Bitte drücke eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Du hast {misses}x verpasst ein altes Wort als bekannt anzugeben und es als neu betitelt.\n'
            if false_alarms:
                feedback_string += f'Du hast {false_alarms}x ein neues Wort als bekannt gewertet. \n'
            if incorrect_associations:
                feedback_string += f'Du hast {incorrect_associations}x ein falsches Bild einem bekannten Wort zugeordnet. \n'
            feedback_string += 'Falls du Fragen hast, stelle diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücke eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_retrieval = 0
            false_alarms = 0
            misses = 0
            incorrect_associations = 0
    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = dummy... something went wrong
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  Routine instructions_part3_3
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    TextComponent text_3
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Nun folgt die erste Testung deines erarbeiteten Wissens. Die Aufgabe ändert sich hierbei nicht. Es wird dir wieder zunächst ein Wort vorgespielt, welches du als alt oder neu einstufen musst und anschließend werden dir 3 Bilder präsentiert aus welchen du das zu dem Wort passende Bild auswählen kannst. Ab sofort wirst du allerdings kein Feedback mehr erhalten, ob deine Antwort richtig oder falsch war.

        Drücke eine beliebige Taste um fortzufahren.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if session == str(1):
            if language == "deutsch":
                text_3 = text_3
            if language == "english":
                text_3 = """ Now comes the first test of your acquired knowledge.
                The task does not change here. Again, you will first be presented with a word that you have to classify as old or new and then 3 pictures will be presented from which you can choose the picture that matches the word.
                From now on, however, you will no longer receive feedback as to whether your answer was correct or incorrect. """
        if session == str(2):
            if language == "deutsch":
                text_3 = """ Willkommen zur letzten Aufgabe dieses Experiments.
                Ich hoffe du konntest dich während des Mittagsschlafs gut erholen und bist nun fit für die Aufgabe.
                Hier wird dein Wissen nocheinmal geprüft.Die Aufgabe ist hierbei dieselbe wie auch vor dem Mittagschlaf.
                Du wirst wieder Wörter vorgespielt bekommen und musst entscheiden, ob das Wort eines der 120 Wörter ist, die du gelernt hast oder ob es neu ist.
                Anschließend kannst du wieder aus 3 Bildern das zu dem Wort passende Bild auswählen. Du wirst diesmal auch kein Feedback zu deinen Antworten erhalten.
                Versuche dich wieder zu konzentrieren und so schnell und akkurat wie möglich zu antworten.
                Viel Erfolg!"""
           if language == "english":
            text_3 = """Welcome to the last task of this experiment.
                I hope you had a good rest during your afternoon nap and are now fit for this task.
                The task is the same as before the nap.
                You will be played words again and have to decide whether the word is one of the 120 words you have learned or whether it is new.
                You can then choose the one image that matches the word from 3 pictures. This time you will not receive any feedback on your answers.
                Try to concentrate and answer as quickly and accurately as possible.
                Good luck! """
  Routine instructions_part3_3_1
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    TextComponent text_4
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Versuche aufmerksam zu bleiben und so schnell und akkurat wie möglich zu antworten. Weiterhin wäre es super, wenn du es schaffst, so still wie möglich zu liegen und deinen Kopf nicht zu bewegen, um eine gute Datenqualität zu garantieren.

        Falls du noch Fragen hast melde dich gerne  beim Experimentleiter.

        Andernfalls drücke eine beliebige Taste, um mit dem Experiment zu starten.
    KeyboardComponent key_resp_5
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_4 = """Try to stay attentive and answer as quickly and accurately as possible. It would also be great if you managed to lie as still as possible and not move your head in order to guarantee good data quality.
            If you have any questions, please contact the experimentor.
            Otherwise, press any button to start the experiment."""
  Routine instruction_end
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    TextComponent text_5
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Sehr gut, du hast es geschafft.
        Die Übung ist nun beendet.

        Melde dich bitte beim Experimentleiter.
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_5 = """ Very nice, you made it. The exercise is now over.
            Please inform the experimentor that you are finished."""
  Routine startup_code
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    CodeComponent startup
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd

        subj_id = expInfo['participant']

        df_retrieval = pd.read_csv(f'./sequences/retrieval_{subj_id}.csv')

        # set variables we will access later
        i_retrieval = 0

        # store answers
        false_alarms = 0
        misses = 0
        incorrect_associations = 0

        # set the number of repetitions we have
        n_retrieval_trials = max(df_retrieval.trial)+1

        if PILOTING:
            n_retrieval_trials = 5

        print('DUMMY TRIALS: subj_id is set to 0')

        # set variables we will access later
        i_retrieval = 0
        i_block = 0

        # set the number of repetitions we have
        n_retrieval_trials_prac = 6
    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        if session==str(1):
            proceed as usual


        if session==str(2):
            skip instructions_part3 instructions_part3_2 retrieval_repetition retrieval_trials


        else:
            print(f'ERROR: session = {session} type(error)={type(error)}, unknown?')
        win.color = "#b0c4de"
        win.flip()
Flow
  Routine startup_code
  Routine instuctions_part3
  Routine instructions_part3_2
  LoopInitiator retrieval_repetition loopType="TrialHandler"
    loopType = sequential
    nReps = n_retrieval_repetition
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    LoopInitiator retrieval_trials_prac loopType="TrialHandler"
      loopType = random
      nReps = n_retrieval_trials_prac
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      Routine fixation_cross
      Routine sound_word
      Routine decision_newold
      Routine imagechoice
      Routine retrieval_feedback
    LoopTerminator retrieval_trials_prac
    Routine practice_feedback
  LoopTerminator retrieval_repetition
  LoopInitiator retrieval_trials loopType="TrialHandler"
    loopType = random
    nReps = n_retrieval_trials
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    Routine fixation_cross
    Routine sound_word
    Routine decision_newold
    Routine imagechoice
    Routine retrieval_feedback
  LoopTerminator retrieval_trials
  Routine instructions_part3_3
  Routine instructions_part3_3_1
  LoopInitiator retrieval2_trials loopType="TrialHandler"
    loopType = random
    nReps = n_retrieval2_trials
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    Routine fixation_cross
    Routine sound_word
    Routine decision_newold
    Routine imagechoice
  LoopTerminator retrieval2_trials
  Routine instruction_end
